# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    module_server:
      address: 'localhost'
      port: 12345
      #certfile: 'c:\Users\Confocal\certs\rt-cert.pem'
      #keyfile: 'c:\Users\Confocal\certs\rt-key.pem'

    # list of modules to load when starting
    startup: ['man', 'tray','tasklogic','kernellogic']

    # For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    timetaggerSlow:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        count_distribution: 'dark_bright_poisson'

    timetaggerFast:
        module.Class: 'fast_counter_dummy.FastCounterDummy'

    gem532:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'

    keysight1:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20
        mock: True

    pulsestreamer:
        module.Class: 'pulser_dummy.PulserDummy'

    nicard:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    ni_instream:
        module.Class: 'data_instream_dummy.InStreamDummy'
        digital_channels:  # optional, must provide at least one digital or analog channel
            - 'digital 1'
        digital_event_rates:  # optional, must have as many entries as digital_channels or just one
            - 1000

    niprocess:
        module.Class: 'process_dummy.ProcessDummy'

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'nicard'
            savelogic: 'savelogic'

    timeserieslogic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        max_frame_rate: 20
        connect:
            _streamer_con: 'ni_instream'
            _savelogic_con: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'nicard'
            savelogic: 'savelogic'

    counter_ttlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'timetaggerSlow'
            savelogic: 'savelogic'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'nicard'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'nicard'
            fitlogic: 'fitlogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        scanmode: 'LIST'
        connect:
            odmrcounter: 'nicard'
            fitlogic: 'fitlogic'
            microwave1: 'keysight1'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    # Any scan using a fourth analogue output to scan a parameter
    # laserscannerlogic:
    #    module.Class: 'laser_scanner_logic.LaserScannerLogic'
    #    connect:
    #        confocalscanner1: 'nicard'
    #        savelogic: 'savelogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'

    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        log_into_daily_directory: False
        win_data_directory: 'Z:\Sample Data\Confocal'
        #win_data_directory: 'C:\Users\Confocal\Documents\Confocal-local'
        unix_data_directory: 'Data/'

    spectrumlogic:
        module.Class: 'spectrum.SpectrumLogic'
        connect:
            spectrometer: 'oceanoptics_spectrometer'
            savelogic: 'savelogic'
            odmrlogic: 'odmrlogic'
            fitlogic: 'fitlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnet_motor_interfuse'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'
            traceanalysis: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'zaber'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        query_interval: 500
        connect:
            laser: 'gem532'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimiserlogic: 'optimizerlogic'
            savelogic: 'savelogic'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #additional_methods_dir: 'C:/Users/Confocal/pulse_sequences'
        connect:
            pulsegenerator: 'pulsestreamer'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fastcounter: 'timetaggerFast'
            pulsegenerator: 'pulsestreamer'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'keysight1'

    polarizationlogic:
        module.Class: 'optical_polarisation_logic.OpticalPolLogic'
        connect:
            motorstage: 'agilis_motor'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'
            counter: 'timetaggerSlow'
            optimizer1: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
        # define resolution in degrees
        # resolution: 5
        # define time in s per resolution point
        measurement_length: 5
        # timetagger count frequency and apds
        count_frequency: 50
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1

    switchinglogic:
        module.Class: 'switching_rates_logic.SwitchingLogic'
        connect:
            laser: 'gem532'
            savelogic: 'savelogic'
            counter: 'timetaggerSlow'
            optimizer1: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
        count_frequency: 50
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        # Set powers to investigate (in mW)
        laser_powers: [1, 2, 3, 4, 5, 6, 7, 8, 9, 10]

    hbtlogic:
        module.Class: 'hbt_logic.HbtLogic'
        connect:
            savelogic: 'savelogic'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        bin_width: 800
        bins: 5000

    imagestacklogic:
        module.Class: 'image_stack_logic.ImageStackLogic'
        connect:
            motorstage: 'agilis_motor'
            savelogic: 'savelogic'
            optimizer1: 'optimizerlogic'
            scannerlogic: 'scannerlogic'

    aomlogic:
        module.Class: 'aom_logic.AomLogic'
        connect:
            voltagescanner: 'nicard'
            laser: 'gem532'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'
        voltage: [0,0.2,0.4,0.5,0.6,0.65,0.7,0.75,0.8,0.85,0.9,0.95,1,1.05,1.1,1.15,1.2,1.25,1.3,1.4,1.5,1.6,1.7,1.8]
        efficiency: [0.000003,0.000004,0.000004,0.000006,0.00029,0.00122,0.003,0.0056,0.00875,0.0122,0.016,0.0199,0.0237,0.0274,0.0305,0.0338,0.036,0.0386,0.0412,0.0447,0.0471,0.0492,0.0509,0.0518]

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            hardware: 'cameradummy'
            savelogic: 'savelogic'

    nv_calculator_logic:
        module.Class: 'nv_calculator_logic.NVCalculatorLogic'
        connect:
            odmr: 'odmrlogic'
            pulsed: 'pulsedmeasurementlogic'

    pulsed_pause:
        module.class: 'pulsed/optimizer_pause_logic/OptimizerPauseLogic'
        connect:
            pulsedmeasurement: 'pulsedmeasurementlogic'
            optimizer: 'optimiserlogic'

    zmq_frontend:
        module.Class: 'zmq.frontend.ZmqFrontend'
        message_port: 7081
        notification_port: 7082
        more_logging: True

    zmq_storage:
        module.Class: 'zmq.hdf_storage.HdfStorage'
        local_directory: 'C:/Users/u1774090/data_hdf'
        remote_directory: 'Z:/Sample Data/Confocal/data_hdf'

    zmq_dummy:
        module.Class: 'zmq.proxy.dummy.DummyProxy'
        channel: 'dummy'
        connect:
            frontend: 'zmq_frontend'

    zmq_optimizer:
        module.Class: 'zmq.proxy.optimizer.OptimizerProxy'
        channel: 'optimizer'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            optimizer: 'optimizerlogic'
            scanner: 'scannerlogic'

    zmq_confocal:
        module.Class: 'zmq.proxy.confocal.ConfocalProxy'
        channel: 'confocal'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            confocal: 'scannerlogic'

    zmq_poi:
        module.Class: 'zmq.proxy.poi.PoiProxy'
        channel: 'poi'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            poi_manager: 'poimanagerlogic'

    zmq_hbt:
        module.Class: 'zmq.proxy.hbt.HbtProxy'
        channel: 'hbt'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            hbt: 'hbtlogic'

    zmq_aom:
        module.Class: 'zmq.proxy.aom.AomProxy'
        channel: 'aom'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            aom: 'aomlogic'

    zmq_odmr:
        module.Class: 'zmq.proxy.odmr.OdmrProxy'
        channel: 'odmr'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            odmr: 'odmrlogic'

    zmq_pulsed:
        module.Class: 'zmq.proxy.pulsed.PulsedProxy'
        channel: 'pulsed'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            pulsed_measurement: 'pulsedmeasurementlogic'
            sequence_generator: 'sequencegeneratorlogic'

gui:

    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    timeseries:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        connect:
            _time_series_logic_con: 'timeserieslogic'

    counter_timetagger:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter_ttlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanagerlogic'
            scannerlogic: 'scannerlogic'

    hbt:
        module.Class: 'hbt.hbtgui.HbtGui'
        connect:
            hbtlogic: 'hbtlogic'
        time_window: 100

    aom:
        module.Class: 'aom.aomgui.AomGui'
        connect:
            aomlogic: 'aomlogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

#    switches:
#        module.Class: 'switch.switch_gui.SwitchGui'
#        connect:
#            switchlogic: 'switchlogic'

    camera_gui:
        module.Class: 'camera.cameragui.CameraGUI'
        connect:
            camera_logic: 'camera_logic'
            savelogic: 'savelogic'

    nv_calculator_gui:
        module.Class: 'nv_calculator.nv_calculatorgui.NVCalculatorGui'
        connect:
            nv_calculatorlogic: 'nv_calculator_logic'

#    laserscanner:
#        module.Class: 'laserscanner.laserscannergui.VoltScanGui'
#        connect:
#            voltagescannerlogic1: 'laserscannerlogic'
#            savelogic: 'savelogic'

    spectrometer:
        module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic: 'spectrumlogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'


