# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    module_server:
      address: 'localhost'
      port: 12345
      #certfile: 'c:\Users\Confocal\certs\rt-cert.pem'
      #keyfile: 'c:\Users\Confocal\certs\rt-key.pem'

    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic', 'kernellogic', 'zmq_manager']

    # For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    timetaggerSlow:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        timetagger_sum_channels: False

    timetaggerFast:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        timetagger_channel_detect: 7
        timetagger_channel_sequence: 6
        timetagger_sum_channels: False

    gem532:
        module.Class: 'laser.laserquantum_laser.LaserQuantumLaser'
        psu: SMD6000
        interface: 'COM8'
        maxpower: 0.1

    keysight1:
        module.Class: 'microwave.mw_source_keysight.MicrowaveKeysight'
        address: 'TCPIP0::192.168.1.101::inst0::INSTR'
        timeout: 10000
        trigger: 'TRIG2'

#    pulsestreamer:
#        module.Class: 'swabian_instruments.pulse_streamer_iq.PulseStreamer'
#        connect:
#            microwave_source: keysight1
#        ip_address: '192.168.1.100'
#        laser_channel: 'd_ch2'
#        microwave_blanking_channel: 'd_ch3'
#        i_channel: 0
#        q_channel: 1

    pulsestreamer:
        module.Class: 'swabian_instruments.pulse_streamer.PulseStreamer'
        ip_address: '192.168.1.100'
        laser_channel: 'd_ch2'
        uw_x_channel: 'd_ch3'
        uw_x_channel: 'd_ch4'

    nicard:
        module.Class: 'national_instruments_x_series.NationalInstrumentsXSeries'
        clock_channel: '/Dev1/Ctr0'
        scanner_clock_channel: '/Dev1/Ctr2'
        photon_sources: ['/Dev1/PFI8']
        counter_channels: ['/Dev1/Ctr1']
        scanner_counter_channels: ['/Dev1/Ctr3']
        gate_in_channel: '/Dev1/PFI10'
        odmr_trigger_channel: '/Dev1/PFI0'
        odmr_trigger_line: 'Dev1/port0/line0'
        odmr_switch_line: 'Dev1/port0/line1'
        counting_edge_rising: True
        clock_frequency: 100
        scanner_clock_frequency: 100
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
            - '/Dev1/AO3'
        scanner_voltage_ranges:
            - [-10,10]
            - [-10,10]
            - [-10,10]
            - [0,5]
        scanner_position_ranges:
            - [0,300e-6]
            - [0,300e-6]
            - [0,300e-6]
        a_voltage: 0.7
        a_other: True
        samples_number: 50

    ni_instream:
        module.Class: 'ni_x_series_in_streamer.NIXSeriesInStreamer'
        device_name: 'Dev1'
        digital_sources:
           - 'PFI8'


    niprocess:
        module.Class: 'ni_process.NIProcess'
        module.Class: 'ni_card.NICard'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        photon_source: '/Dev1/PFI8'
        scanner_x_ao: '/Dev1/AO0'
        scanner_y_ao: '/Dev1/AO1'
        scanner_z_ao: '/Dev1/AO2'
        gate_in_channel: '/Dev1/PFI10'
        odmr_trigger_channel: '/Dev1/PFI0'
        counting_edge_rising: True
        clock_frequency: 100
        scanner_clock_frequency: 100
        x_range: [0, 300e-6]
        y_range: [0, 300e-6]
        z_range: [0, 300e-6]
        voltage_range: [-10, 10]
        samples_number: 50

    zaber:
        module.Class: 'motor.zaber_motor_rotation_stage.MotorRotationZaber'
        com_port: 'COM7'
        baud_rate: 9600
        timeout: 1000
        term_char: '\n'
        micro_step_size: 234.375e-6
        speed_conversion: 9.375

        axes:
            -   label: 'phi'
                id: 1
                angle_min: -20 # degrees
                angle_max: 100
                angle_step: 0.1
                velocity_min: 0.1 # degrees/s
                velocity_max: 5
                velocity_step: .1

            -   label: 'theta'
                id: 2
                angle_min: -60
                angle_max: 60
                angle_step: 0.1
                velocity_min: 0.1
                velocity_max: 5
                velocity_step: .1

    agilis_motor:
        module.Class: 'motor.agilis_controller.AgilisController'
        com_interface: 'COM4'
        axis_labels:
            - hwp_532
            - det_pol
            - hwp_488
        # Define pitch as number of steps per degree
        # Unfortunately pitch will vary often for PR100 mounts
        # So will need to keep a track on it
        hwp_532:
            motor_type: PR100
            channel: 1
            axis: 1
            unit: 'degrees'
            # was 580
            pos_pitch: 574
            # was 506
            neg_pitch: 500
            constraints:
                pos_min: -360
                pos_max: 720
        det_pol:
            motor_type: PR100
            channel: 1
            axis: 2
            unit: 'degrees'
            pos_pitch: 477
            neg_pitch: 453
            constraints:
                pos_min: -360
                pos_max: 720
        hwp_488:
            motor_type: PR100
            channel: 2
            axis: 1
            unit: 'degrees'
            pos_pitch: 574
            neg_pitch: 500
            constraints:
                pos_min: -360
                pos_max: 720

    apt_motors:
        module.Class: 'motor.aptmotor.APTStage'
        dll_path: 'C:\\Program Files\\Thorlabs\\APT\\APT Server\\APT.dll'
        axis_labels: ['maglinear']
        maglinear:
            hw_type: 'TDC001'
            serial_num: 27252314
            pitch: 1
            unit: 'm'
            constraints:
                pos_min: 0.0
                pos_max: 0.025
                vel_min: 0.00055
                vel_max: 0.0009
                acc_min: 0.0001
                acc_max: 0.002

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'nicard'
            savelogic: 'savelogic'

    timeserieslogic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        max_frame_rate: 20
        connect:
            _streamer_con: 'ni_instream'
            _savelogic_con: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'nicard'
            savelogic: 'savelogic'

    counter_ttlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'timetaggerSlow'
            savelogic: 'savelogic'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'nicard'

    arbitraryscanlogic:
        module.Class: 'arbitrary_scan_logic.ArbitraryScanLogic'
        connect:
            confocal_scanner: 'nicard'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'nicard'
            fitlogic: 'fitlogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        scanmode: 'LIST'
        connect:
            odmrcounter: 'nicard'
            fitlogic: 'fitlogic'
            microwave1: 'keysight1'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    # Any scan using a fourth analogue output to scan a parameter
    # laserscannerlogic:
    #    module.Class: 'laser_scanner_logic.LaserScannerLogic'
    #    connect:
    #        confocalscanner1: 'nicard'
    #        savelogic: 'savelogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'

    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        log_into_daily_directory: False
        win_data_directory: 'Z:\Sample Data\Confocal'
        #win_data_directory: 'C:\Users\Confocal\Documents\Confocal-local'
        unix_data_directory: 'Data/'

    spectrumlogic:
        module.Class: 'spectrum.SpectrumLogic'
        connect:
            spectrometer: 'oceanoptics_spectrometer'
            savelogic: 'savelogic'
            odmrlogic: 'odmrlogic'
            fitlogic: 'fitlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnet_motor_interfuse'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'
            traceanalysis: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'zaber'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        query_interval: 500
        connect:
            laser: 'gem532'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimiserlogic: 'optimizerlogic'
            savelogic: 'savelogic'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #additional_methods_dir: 'C:/Users/Confocal/pulse_sequences'
        disable_benchmark_prompt: True
        microwave_y_channel: 'd_ch4'
        connect:
            pulsegenerator: 'pulsestreamer'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fastcounter: 'timetaggerFast'
            pulsegenerator: 'pulsestreamer'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'keysight1'

    polarizationlogic:
        module.Class: 'optical_polarisation_logic.OpticalPolLogic'
        connect:
            motorstage: 'agilis_motor'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'
            counter: 'timetaggerSlow'
            optimizer1: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
        # define resolution in degrees
        # resolution: 5
        # define time in s per resolution point
        measurement_length: 5
        # timetagger count frequency and apds
        count_frequency: 50
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1

    switchinglogic:
        module.Class: 'switching_rates_logic.SwitchingLogic'
        connect:
            laser: 'gem532'
            savelogic: 'savelogic'
            counter: 'timetaggerSlow'
            optimizer1: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
        count_frequency: 50
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        # Set powers to investigate (in mW)
        laser_powers: [1, 2, 3, 4, 5, 6, 7, 8, 9, 10]

    hbtlogic:
        module.Class: 'hbt_logic.HbtLogic'
        connect:
            savelogic: 'savelogic'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        bin_width: 800
        bins: 5000

    imagestacklogic:
        module.Class: 'image_stack_logic.ImageStackLogic'
        connect:
            motorstage: 'agilis_motor'
            savelogic: 'savelogic'
            optimizer1: 'optimizerlogic'
            scannerlogic: 'scannerlogic'

    aomlogic:
        module.Class: 'aom_logic.AomLogic'
        connect:
            voltagescanner: 'nicard'
            laser: 'gem532'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'
        voltage: [0,0.2,0.4,0.5,0.6,0.65,0.7,0.75,0.8,0.85,0.9,0.95,1,1.05,1.1,1.15,1.2,1.25,1.3,1.4,1.5,1.6,1.7,1.8,2,2.4,2.8,3.5,5]
        efficiency: [0.00000674,0.00000691,0.00000703,0.00000958,0.000473,0.002083,0.00521,0.0098,0.01545,0.0221,0.0289,0.03615,0.0436,0.05025,0.05845,0.06405,0.0702,0.07575,0.0801,0.0878,0.09415,0.09845,0.1029,0.106,0.111,0.1176,0.122,0.1271,0.131]

    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            hardware: 'cameradummy'
            savelogic: 'savelogic'

    nv_calculator_logic:
        module.Class: 'nv_calculator_logic.NVCalculatorLogic'
        connect:
            odmr: 'odmrlogic'
            pulsed: 'pulsedmeasurementlogic'

    pulsed_pause:
        module.Class: 'pulsed.optimizer_pause_logic.OptimizerPauseLogic'
        connect:
            pulsedmeasurement: 'pulsedmeasurementlogic'
            optimizer: 'optimizerlogic'

    zmq_frontend:
        module.Class: 'zmq.frontend.ZmqFrontend'
        message_port: 7081
        notification_port: 7082
        more_logging: True

    zmq_storage:
        module.Class: 'zmq.storage.TablesStorage'
        base_directory: 'C:/Users/Confocal/Documents/jupyter/sessions'
        connect:
            poimanager: 'poimanagerlogic'

    zmq_dummy:
        module.Class: 'zmq.proxy.dummy.DummyProxy'
        channel: 'dummy'
        connect:
            frontend: 'zmq_frontend'

    zmq_manager:
        module.Class: 'zmq.proxy.manager.ManagerProxy'
        channel: 'manager'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'

    zmq_optimizer:
        module.Class: 'zmq.proxy.optimizer.OptimizerProxy'
        channel: 'optimizer'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            optimizer: 'optimizerlogic'
            poimanager: 'poimanagerlogic'
            scanner: 'scannerlogic'

    zmq_confocal:
        module.Class: 'zmq.proxy.confocal.ConfocalProxy'
        channel: 'confocal'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            confocal: 'scannerlogic'
            scanning_device: 'nicard'

    zmq_scan:
        module.Class: 'zmq.proxy.scan.ScanProxy'
        channel: 'scan'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            arbscan: 'arbitraryscanlogic'

    zmq_poimanager:
        module.Class: 'zmq.proxy.poimanager.PoiManagerProxy'
        channel: 'poimanager'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            poimanager: 'poimanagerlogic'

    zmq_hbt:
        module.Class: 'zmq.proxy.hbt.HbtProxy'
        channel: 'hbt'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            poimanager: 'poimanagerlogic'
            hbt: 'hbtlogic'

    zmq_aom:
        module.Class: 'zmq.proxy.aom.AomProxy'
        channel: 'aom'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            poimanager: 'poimanagerlogic'
            aomlogic: 'aomlogic'

    zmq_odmr:
        module.Class: 'zmq.proxy.odmr.OdmrProxy'
        channel: 'odmr'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            odmr: 'odmrlogic'
            poimanager: 'poimanagerlogic'
            aom: 'aomlogic'
            confocal: 'scannerlogic'

    zmq_pulsed:
        module.Class: 'zmq.proxy.pulsed.PulsedProxy'
        channel: 'pulsed'
        connect:
            frontend: 'zmq_frontend'
            storage: 'zmq_storage'
            poimanager: 'poimanagerlogic'
            pulsed_measurement: 'pulsedmeasurementlogic'
            pulsed_master_logic: 'pulsedmasterlogic'

gui:

    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    timeseries:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        connect:
            _time_series_logic_con: 'timeserieslogic'

    counter_timetagger:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter_ttlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanagerlogic'
            scannerlogic: 'scannerlogic'

    hbt:
        module.Class: 'hbt.hbtgui.HbtGui'
        connect:
            hbtlogic: 'hbtlogic'
        time_window: 100

    aom:
        module.Class: 'aom.aomgui.AomGui'
        connect:
            aomlogic: 'aomlogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'

#    switches:
#        module.Class: 'switch.switch_gui.SwitchGui'
#        connect:
#            switchlogic: 'switchlogic'

    camera_gui:
        module.Class: 'camera.cameragui.CameraGUI'
        connect:
            camera_logic: 'camera_logic'
            savelogic: 'savelogic'

    nv_calculator_gui:
        module.Class: 'nv_calculator.nv_calculatorgui.NVCalculatorGui'
        connect:
            nv_calculatorlogic: 'nv_calculator_logic'

#    laserscanner:
#        module.Class: 'laserscanner.laserscannergui.VoltScanGui'
#        connect:
#            voltagescannerlogic1: 'laserscannerlogic'
#            savelogic: 'savelogic'

    spectrometer:
        module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic: 'spectrumlogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'


